PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GTDT_P
  keyboardBackend = ioHub
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Routines
  Routine instruction1
    ImageComponent i1
      image = instruction1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    ImageComponent i2
      image = instruction2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    ImageComponent i3
      image = D:/happy_working/repCPP/Stage1/GradualTargetDetectionTask/GTDT(Neuroscan)/instruction3P1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine GTDT
    PolygonComponent bg
      contrast [set every frame] = 1
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    PolygonComponent annular
      contrast [set every frame] = 1
      fillColor = grey
      interpolate = nearest
      lineColor = grey
      lineWidth [set every frame] = 1
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    PolygonComponent cover
      contrast [set every frame] = 0
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      opacity [set every frame] = 0.5
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    PolygonComponent center
      fillColor = white
      interpolate = nearest
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    KeyboardComponent press
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      store = all keys
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if trials.thisN == 0:
            number_correct = 0
      End Routine:
        if press.corr:
            number_correct = number_correct +1
  Routine rest
    ImageComponent i4
      image = instruction4.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine condition
    ImageComponent i5
      image = instruction5.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practise_end
    ImageComponent image
      image = D:/happy_learning/cpp/psychopy/make_new/rep_practise.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      End Routine:
        if "p" in key_resp_6.keys:
            practise_back.finished = True
  Routine present_corr
    TextComponent practise_corr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        correct_rate = number_correct / (trials.nTotal + 1)
        practise_corr.setText("Your correct rate is ({:.2f}), press 'p' to continue".format(correct_rate))
Flow
  LoopInitiator practise_back loopType="TrialHandler"
    loopType = sequential
    nReps = 999
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    Routine instruction3
    Routine fixation
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = D:/happy_working/repCPP/Stage1/GradualTargetDetectionTask/GTDT(Neuroscan)/c1p.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'asec': 6.4, 'ssec': 0.3, 'esec': 0.4},
        {'asec': 9.6, 'ssec': 0.4, 'esec': 0.5},
        {'asec': 12.8, 'ssec': 0.5, 'esec': 0.6},
        {'asec': 6.4, 'ssec': 0.6, 'esec': 0.7},
        {'asec': 9.6, 'ssec': 0.7, 'esec': 0.8},
        {'asec': 12.8, 'ssec': 0.8, 'esec': 0.9},
        {'asec': 6.4, 'ssec': 0.9, 'esec': 1},
        {'asec': 9.6, 'ssec': 1, 'esec': 1.1},
        {'asec': 12.8, 'ssec': 1.1, 'esec': 1.2},
        {'asec': 9.6, 'ssec': 1.2, 'esec': 1.3}]
      Routine GTDT
    LoopTerminator trials
    Routine present_corr
    Routine practise_end
  LoopTerminator practise_back
