PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = newGTDT
  keyboardBackend = ioHub
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Routines
  Routine instruction
    ImageComponent image
      image = D:/Desktop/GT/instruction1.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    ImageComponent image_2
      image = instruction2.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    ImageComponent image_3
      image = instruction3C1.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ParallelOutComponent p_port
      address = 0x5FB8
      register = EIO
      startData = $bmarker
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine trial
    PolygonComponent background
      contrast [set every frame] = 1
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    PolygonComponent annular
      contrast [set every frame] = 1
      fillColor = grey
      interpolate = nearest
      lineColor = grey
      lineWidth [set every frame] = 1
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    PolygonComponent cover
      contrast [set every frame] = 0
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      opacity [set every frame] = 0.5
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    PolygonComponent center
      fillColor = white
      interpolate = nearest
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    KeyboardComponent press
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.6
      store = first key
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    ParallelOutComponent stimulus
      address = 0x5FB8
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent response
      address = 0x5FB8
      register = EIO
      startData = 2
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    KeyboardComponent wrong1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.8
      store = all keys
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  Routine duration
    PolygonComponent dbackground
      contrast [set every frame] = 1
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    PolygonComponent dannular
      contrast [set every frame] = 1
      fillColor = blue
      interpolate = nearest
      lineColor = blue
      lineWidth [set every frame] = 1
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    PolygonComponent dcover
      contrast [set every frame] = 0
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      opacity [set every frame] = 0.5
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    PolygonComponent dcenter
      contrast [set every frame] = 1
      fillColor = white
      interpolate = nearest
      lineWidth [set every frame] = 1
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
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    KeyboardComponent wrong2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      store = all keys
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Flow
  Routine instruction
  Routine instruction2
  Routine instruction3
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blockList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'bmarker': 101},
      {'bmarker': 102},
      {'bmarker': 103},
      {'bmarker': 104},
      {'bmarker': 105},
      {'bmarker': 106},
      {'bmarker': 107},
      {'bmarker': 108}]
    Routine fixation
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trialList.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'asec': 4},
        {'asec': 7.2},
        {'asec': 10.4}]
      Routine trial
      Routine duration
    LoopTerminator trials
  LoopTerminator blocks
