PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 2and3
  keyboardBackend = ioHub
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Routines
  Routine instruction1_2
    ImageComponent i1_2
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/instruction2.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction1_1
    ImageComponent i1_1
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/instruction1.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    ImageComponent i2
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/instruction3C3.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction1_3
    ImageComponent i1_3
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/instruction3C2.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_3
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation2
    TextComponent text_2
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = cm
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    ParallelOutComponent bstart2
      address = 0x0378
      register = EIO
      startData = 12
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine fixation1
    TextComponent text
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = cm
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    ParallelOutComponent bstart
      address = 0x0378
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine GTDT2_1
    PolygonComponent annular1
      fillColor = grey
      lineColor = grey
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    PolygonComponent cover1
      contrast = 0
      fillColor = white
      opacity = 0.5
      shape = circle
      size = (5.6, 5.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    PolygonComponent center1
      fillColor = grey
      interpolate = nearest
      lineColor = grey
      shape = circle
      size = (2.8, 2.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    PolygonComponent bg1
      fillColor = white
      interpolate = nearest
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      store = all keys
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    ParallelOutComponent stimulus1
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine GTDT3_1
    PolygonComponent annular2
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    PolygonComponent cover2
      contrast = 0
      fillColor = white
      opacity = 0.5
      shape = circle
      size = (5.6, 5.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    PolygonComponent center2
      fillColor = grey
      interpolate = nearest
      lineColor = grey
      shape = circle
      size = (2.8, 2.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    PolygonComponent bg2
      fillColor = white
      interpolate = nearest
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      units = cm
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    KeyboardComponent key_resp_7
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $asec
      store = all keys
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    ParallelOutComponent stimulus2
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine rest2
    ImageComponent rest_2
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/rest2.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_9
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine question
    TextComponent text_3
      letterHeight = 2
      pos = (0, 1.5)
      startVal [time (s)] = 0.0
      units = cm
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      text:
        请问在这个阶段中，你观察到圆环变暗的次数为？
        填写完成后按空格键提交
    ParallelOutComponent bend2
      address = 0x0378
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 1
      pos = (0, -2.5)
      size = (10, 10)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine rest1
    ImageComponent rest_1
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/rest1.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent bend1
      address = 0x0378
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine rest2_2
  Routine rest3
    ImageComponent rest_3
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/rest3.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_10
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent bend3
      address = 0x0378
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine rest4
    ImageComponent rest_4
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/rest4.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_11
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent bend4
      address = 0x0378
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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  Routine rest5
    ImageComponent rest_5
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/rest5.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_12
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest6
    ImageComponent instruction5
      image = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/instruction5.png
      size = (32, 20)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_13
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent bend6
      address = 0x0378
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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Flow
  Routine instruction1_1
  Routine instruction1_2
  Routine instruction1_3
  Routine fixation1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/c2.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 9.6}]
    Routine GTDT2_1
  LoopTerminator trials
  Routine rest1
  Routine instruction2
  Routine fixation2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/c325.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 6.4},
      {'asec_25': 9.6},
      {'asec_25': 12.8},
      {'asec_25': 9.6}]
    Routine GTDT3_1
  LoopTerminator trials_2
  Routine question
  Routine rest2
  Routine instruction1_3
  Routine fixation1
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/c2.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 6.4},
      {'asec': 9.6},
      {'asec': 12.8},
      {'asec': 9.6}]
    Routine GTDT2_1
  LoopTerminator trials_3
  Routine rest3
  Routine instruction1_3
  Routine fixation1
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/c2.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine GTDT2_1
  LoopTerminator trials_4
  Routine rest4
  Routine instruction2
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/c326.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 6.4},
      {'asec_26': 9.6},
      {'asec_26': 12.8},
      {'asec_26': 9.6},
      {'asec_26': 9.6}]
    Routine GTDT3_1
  LoopTerminator trials_5
  Routine question
  Routine rest5
  Routine instruction1_3
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = D:/happy_working/repCPP/Stage1/1_Procedure/1_Version_control/make_new/c2.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine GTDT2_1
  LoopTerminator trials_6
  Routine rest6
